<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyUp">
          <wie:Filter>None</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>mock raton falso.avi</cv:FileName>
            <cv:PlaybackRate>0</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>150</cv:X>
                <cv:Y>381</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>381</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>147</cv:X>
                <cv:Y>381</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>150</cv:X>
                <cv:Y>381</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>505</cv:X>
                <cv:Y>386</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>136</cv:X>
                <cv:Y>386</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>136</cv:X>
                <cv:Y>107</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>505</cv:X>
                <cv:Y>107</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>440</cv:X>
                <cv:Y>291</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>440</cv:X>
                <cv:Y>295</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>439</cv:X>
                <cv:Y>299</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>437</cv:X>
                <cv:Y>302</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>435</cv:X>
                <cv:Y>305</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>432</cv:X>
                <cv:Y>308</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>429</cv:X>
                <cv:Y>310</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>425</cv:X>
                <cv:Y>312</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>421</cv:X>
                <cv:Y>313</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>418</cv:X>
                <cv:Y>313</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>414</cv:X>
                <cv:Y>313</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>410</cv:X>
                <cv:Y>312</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>406</cv:X>
                <cv:Y>310</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>403</cv:X>
                <cv:Y>308</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>400</cv:X>
                <cv:Y>305</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>398</cv:X>
                <cv:Y>302</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>396</cv:X>
                <cv:Y>299</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>395</cv:X>
                <cv:Y>295</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>395</cv:X>
                <cv:Y>291</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>395</cv:X>
                <cv:Y>287</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>396</cv:X>
                <cv:Y>283</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>398</cv:X>
                <cv:Y>280</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>400</cv:X>
                <cv:Y>277</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>403</cv:X>
                <cv:Y>274</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>406</cv:X>
                <cv:Y>272</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>410</cv:X>
                <cv:Y>270</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>414</cv:X>
                <cv:Y>269</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>418</cv:X>
                <cv:Y>269</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>421</cv:X>
                <cv:Y>269</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>425</cv:X>
                <cv:Y>270</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>429</cv:X>
                <cv:Y>272</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>432</cv:X>
                <cv:Y>274</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>435</cv:X>
                <cv:Y>277</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>437</cv:X>
                <cv:Y>280</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>439</cv:X>
                <cv:Y>283</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>440</cv:X>
                <cv:Y>287</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>227</cv:X>
                <cv:Y>188</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>227</cv:X>
                <cv:Y>192</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>226</cv:X>
                <cv:Y>196</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>224</cv:X>
                <cv:Y>199</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>222</cv:X>
                <cv:Y>202</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>219</cv:X>
                <cv:Y>205</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>216</cv:X>
                <cv:Y>207</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>212</cv:X>
                <cv:Y>209</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>208</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>205</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>201</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>197</cv:X>
                <cv:Y>209</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>193</cv:X>
                <cv:Y>207</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>190</cv:X>
                <cv:Y>205</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>187</cv:X>
                <cv:Y>202</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>185</cv:X>
                <cv:Y>199</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>183</cv:X>
                <cv:Y>196</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>182</cv:X>
                <cv:Y>192</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>182</cv:X>
                <cv:Y>188</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>182</cv:X>
                <cv:Y>184</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>183</cv:X>
                <cv:Y>180</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>185</cv:X>
                <cv:Y>177</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>187</cv:X>
                <cv:Y>174</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>190</cv:X>
                <cv:Y>171</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>193</cv:X>
                <cv:Y>169</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>197</cv:X>
                <cv:Y>167</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>201</cv:X>
                <cv:Y>166</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>205</cv:X>
                <cv:Y>166</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>208</cv:X>
                <cv:Y>166</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>212</cv:X>
                <cv:Y>167</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>216</cv:X>
                <cv:Y>169</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>219</cv:X>
                <cv:Y>171</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>222</cv:X>
                <cv:Y>174</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>224</cv:X>
                <cv:Y>177</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>226</cv:X>
                <cv:Y>180</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>227</cv:X>
                <cv:Y>184</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>53</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>129</cv:X>
                <cv:Y>94</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>128</cv:X>
                <cv:Y>102</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>126</cv:X>
                <cv:Y>110</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>123</cv:X>
                <cv:Y>118</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>118</cv:X>
                <cv:Y>125</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>112</cv:X>
                <cv:Y>131</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>105</cv:X>
                <cv:Y>136</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>97</cv:X>
                <cv:Y>139</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>89</cv:X>
                <cv:Y>141</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>81</cv:X>
                <cv:Y>142</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>73</cv:X>
                <cv:Y>141</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>65</cv:X>
                <cv:Y>139</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>57</cv:X>
                <cv:Y>136</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>50</cv:X>
                <cv:Y>131</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>44</cv:X>
                <cv:Y>125</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>39</cv:X>
                <cv:Y>118</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>36</cv:X>
                <cv:Y>110</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>34</cv:X>
                <cv:Y>102</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>33</cv:X>
                <cv:Y>94</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>34</cv:X>
                <cv:Y>86</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>36</cv:X>
                <cv:Y>78</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>39</cv:X>
                <cv:Y>70</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>44</cv:X>
                <cv:Y>63</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>50</cv:X>
                <cv:Y>57</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>57</cv:X>
                <cv:Y>52</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>65</cv:X>
                <cv:Y>49</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>73</cv:X>
                <cv:Y>47</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>81</cv:X>
                <cv:Y>46</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>89</cv:X>
                <cv:Y>47</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>97</cv:X>
                <cv:Y>49</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>105</cv:X>
                <cv:Y>52</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>112</cv:X>
                <cv:Y>57</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>118</cv:X>
                <cv:Y>63</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>123</cv:X>
                <cv:Y>70</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>126</cv:X>
                <cv:Y>78</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>128</cv:X>
                <cv:Y>86</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivityDetected">
          <cv:Index xsi:nil="true" />
          <cv:Threshold>400000</cv:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>false</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>true</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>150</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>COM7</ard:PortName>
          <ard:Pin>10</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM7</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>316</cv:X>
                <cv:Y>183</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>315</cv:X>
                <cv:Y>191</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>313</cv:X>
                <cv:Y>198</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>310</cv:X>
                <cv:Y>205</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>306</cv:X>
                <cv:Y>211</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>301</cv:X>
                <cv:Y>217</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>295</cv:X>
                <cv:Y>221</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>289</cv:X>
                <cv:Y>224</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>282</cv:X>
                <cv:Y>226</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>275</cv:X>
                <cv:Y>227</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>267</cv:X>
                <cv:Y>226</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>260</cv:X>
                <cv:Y>224</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>254</cv:X>
                <cv:Y>221</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>248</cv:X>
                <cv:Y>217</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>243</cv:X>
                <cv:Y>211</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>239</cv:X>
                <cv:Y>205</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>236</cv:X>
                <cv:Y>198</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>234</cv:X>
                <cv:Y>191</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>233</cv:X>
                <cv:Y>183</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>234</cv:X>
                <cv:Y>176</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>236</cv:X>
                <cv:Y>169</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>239</cv:X>
                <cv:Y>162</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>243</cv:X>
                <cv:Y>156</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>248</cv:X>
                <cv:Y>150</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>254</cv:X>
                <cv:Y>146</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>260</cv:X>
                <cv:Y>143</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>267</cv:X>
                <cv:Y>141</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>275</cv:X>
                <cv:Y>140</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>282</cv:X>
                <cv:Y>141</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>289</cv:X>
                <cv:Y>143</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>295</cv:X>
                <cv:Y>146</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>301</cv:X>
                <cv:Y>150</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>306</cv:X>
                <cv:Y>156</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>310</cv:X>
                <cv:Y>162</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>313</cv:X>
                <cv:Y>169</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>315</cv:X>
                <cv:Y>176</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivityDetected">
          <cv:Index xsi:nil="true" />
          <cv:Threshold>410000</cv:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>0</cv:AdaptationRate>
          <cv:ThresholdValue>68</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>dato_T_A_2.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>video_T_A_2.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>serv</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>serv</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>COM7</ard:PortName>
                <ard:Pin>10</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="5" To="30" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="32" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="22" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="20" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="12" To="29" Label="Source3" />
      <Edge From="12" To="19" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="29" Label="Source4" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>